PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', 'gender': '["male" , "female", "other"]', 'Year of birth': '', 'Do you own a pet?': '["yes", "no"]', 'Would you consider adopting a pet?': '["yes", "no"]'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = white
  expName = FoodAnimal
  eyetracker = GazePoint
  gpAddress = 127.0.0.1
  gpPort = 4242
  keyboardBackend = ioHub
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Routines
  Routine calib_instr
    ImageComponent calib_inst
      image = instructions/calib_I.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_calib_i
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine read_instr
    ImageComponent image
      image = stimuli/syl_i.jpeg
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    ImageComponent end_img
      image = instructions/end_i.png
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine fix
    PolygonComponent fix_cross
      fillColor = black
      lineWidth = 0.1
      saveStartStop = False
      shape = cross
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine calib_cont
    CodeComponent code_calib_contr
      Code Type = Py
      Begin Experiment:
        timeout = 10

        from math import atan2, degrees

        h=22.2
        d=57
        r=1080

        deg_per_px = degrees(atan2(0.5*h, d))/(0.5*r)

        deg_per_hu = deg_per_px *r
      Begin Routine:
        #present validation results
        results = validation.getValidationResults()
        valid_results = "Validation Results in height units\nMin: %.4f, Max: %.4f, Mean: %.4f (%s units)\n" % \
          (results['min_error'], results['max_error'], results['mean_error'], \
           results['reporting_unit_type'])

        valid_results_deg = "Validation Results in degree visual angle\nMin: %.4f, Max: %.4f, Mean: %.4f" % \
          (results['min_error']*deg_per_hu, results['max_error']*deg_per_hu, results['mean_error']*deg_per_hu)

        calib_query = "%s\n%s\n\nRecalibrate (y/n)?" % (valid_results,valid_results_deg)
      End Routine:
        #calib_resp Keyboard component must have set Store: all keys
        if calib_resp is not None and 'n' in calib_resp.keys:
            calib_loop.finished = True
    TextComponent calib_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $calib_query
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    KeyboardComponent calib_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine survey
    TextComponent survey_ques_txt
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $surv_ques
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    SliderComponent survey_resp
      borderColor = gray
      color = black
      fillColor = blue
      forceEndRoutine = True
      granularity = 1
      labels = ["Not much at all", "Very much"]
      letterHeight = 0.03
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.5, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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  Routine task
    ImageComponent task_img
      image [set every repeat] = $task_inst
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent space_resp_1
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stim_exposure
    CodeComponent code_io
      Code Type = Py
      Begin Experiment:
        #ioServer.sendMesssageEvent(text='%s' % (win.units), category='units')
      Begin Routine:
        # BEGIN ROUTINE
        ioServer.sendMessageEvent(text='%s%s' % ('start:',trial_id), category = 'trial_answer')
      End Routine:
        # END ROUTINE
        ioServer.sendMessageEvent(text='%s%s' % ('end:',trial_id), category = 'trial_answer')
    EyetrackerRecordComponent etRecord
      actionType = Start and Stop
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      syncScreenRefresh = True
    ImageComponent stim_img
      image [set every repeat] = $stim
      saveStartStop = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
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  Routine task_resp
    SliderComponent task_resp_slider
      borderColor = gray
      color = black
      fillColor = blue
      forceEndRoutine = True
      granularity = 1
      labels = ["1", "2", "3", "4", "5", "6", "7", "8", "9", "10", "11", "12", "13", "14", "15", "16"]
      letterHeight = 0.03
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.0, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16)
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    TextComponent count_ques_txt
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $count_ques
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  Routine task_difficult
    TextComponent diff_rate_ques
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = How difficult was this task?
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    SliderComponent difficult_rate_slider
      borderColor = gray
      color = black
      fillColor = blue
      forceEndRoutine = True
      granularity = 1
      labels = ["Very easy", "Very difficult"]
      letterHeight = 0.03
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.0, 0.02)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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  Routine startInstr
    ImageComponent welcome_instr
      image = instructions/welcome_i.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent space_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine mainInstr
    KeyboardComponent space_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent main_instr
      image = instructions/instr.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine valid_instr
    ImageComponent validation_image
      image = instructions/valid_i.png
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_val
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 1
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 1
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    textColor = black
    units = from exp settings
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 1
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 1
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = True
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = FIVE_POINTS
    targetPositions = NINE_POINTS
    textColor = black
    units = from exp settings
Flow
  Routine startInstr
  LoopInitiator survey_trials loopType="TrialHandler"
    conditionsFile = survey_ques.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('surv_ques', 'How much do you like snacking?')]),
      OrderedDict([('surv_ques', 'How hungry are you?')]),
      OrderedDict([('surv_ques', 'How much do you like cats?')]),
      OrderedDict([('surv_ques', 'How much do you like dogs?')]),
      OrderedDict([('surv_ques', 'How much do you like animals?')]),
      OrderedDict([('surv_ques', 'Would you like to adopt a pet some time in the future?')])]
    Routine survey
  LoopTerminator survey_trials
  Routine calib_instr
  LoopInitiator calib_loop loopType="TrialHandler"
    loopType = sequential
    nReps = timeout
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    EyetrackerCalibrationRoutine calibration
    Routine valid_instr
    EyetrackerValidationRoutine validation
    Routine calib_cont
  LoopTerminator calib_loop
  Routine mainInstr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = blocks.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('task_inst', 'instructions\\count_animals.png'), ('stim_img', 'stimuli/cats_bread_1_1920x1080.jpg'), ('count_ques', 'How many pictures with animals did you count?'), ('corr_answer', None)]),
      OrderedDict([('task_inst', 'instructions\\count_animals.png'), ('stim_img', 'stimuli/cats_bread_2_1920x1080.jpg'), ('count_ques', 'How many pictures with animals did you count?'), ('corr_answer', None)]),
      OrderedDict([('task_inst', 'instructions\\count_animals.png'), ('stim_img', 'stimuli/cats_ice_cream_1920x1080.jpg'), ('count_ques', 'How many pictures with animals did you count?'), ('corr_answer', None)]),
      OrderedDict([('task_inst', 'instructions\\count_animals.png'), ('stim_img', 'stimuli/dog_bagel_1920x1080.jpg'), ('count_ques', 'How many pictures with animals did you count?'), ('corr_answer', None)]),
      OrderedDict([('task_inst', 'instructions\\count_animals.png'), ('stim_img', 'stimuli/dog_ice_cream_1920x1080.jpg'), ('count_ques', 'How many pictures with animals did you count?'), ('corr_answer', None)]),
      OrderedDict([('task_inst', 'instructions\\count_animals.png'), ('stim_img', 'stimuli/dog_KFC_1920x1080.jpg'), ('count_ques', 'How many pictures with animals did you count?'), ('corr_answer', None)]),
      OrderedDict([('task_inst', 'instructions\\count_animals.png'), ('stim_img', 'stimuli/dog_toast_1920x1080.jpg'), ('count_ques', 'How many pictures with animals did you count?'), ('corr_answer', None)])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
    Routine task
    Routine fix
    Routine stim_exposure
    Routine task_resp
    Routine task_difficult
  LoopTerminator trials
  Routine end
